<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:RepositoryLogController.bonsai">
        <RepositoryPath>..\..\</RepositoryPath>
        <DataPath>D:\ProjectAeon</DataPath>
        <FallbackPath>D:\Tests</FallbackPath>
        <ChunkSize>1</ChunkSize>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:ExportMetadata.bonsai">
        <WorkflowName>Ephys-AEONX1.bonsai</WorkflowName>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>OnixHarpSync</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>HarpTime</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ConvertToHarpTimestamp" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>HarpClock</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateTimestamped" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
        <Heartbeats />
        <ClosingDuration xsi:nil="true" />
        <LogName>NeuropixelsV2Beta_HarpSync</LogName>
        <Selector />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>NeuropixelsV2BetaProbeB</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WindowCount">
          <rx:Count>360000</rx:Count>
          <rx:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>AmplifierData</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>AmplifierData</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogBinaryData.bonsai">
        <LogName>NeuropixelsV2Beta_ProbeB_AmplifierData</LogName>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>FrameCounter</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>FrameCounter</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogBinaryData.bonsai">
        <LogName>NeuropixelsV2Beta_ProbeB_FrameCounter</LogName>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>Clock</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Clock</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogBinaryData.bonsai">
        <LogName>NeuropixelsV2Beta_ProbeB_Clock</LogName>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>HubSyncCounter</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HubClock</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogBinaryData.bonsai">
        <LogName>NeuropixelsV2Beta_ProbeB_HubSyncCounter</LogName>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="6" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="10" To="13" Label="Source1" />
      <Edge From="10" To="15" Label="Source1" />
      <Edge From="10" To="17" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>