<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:sleap="clr-namespace:Bonsai.Sleap;assembly=Bonsai.Sleap"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>SubjectStart</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ActiveSubject</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PoseTrackingTop</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="harp:ConvertTimestamped">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ActiveSubject</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Id</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Identity" Selector="Item2" />
                    </PropertyMappings>
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="sleap:GetMaximumConfidencePoseIdentity">
                      <sleap:Identity />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SubjectStop</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Id</Selector>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsActiveSubject</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ActiveSubject</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Id</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Equal" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="8" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>