<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:p1="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Center" />
      </Expression>
      <Expression xsi:type="PropertySource" TypeArguments="aeon:DistanceFromPoint,p1:Point">
        <MemberName>Value</MemberName>
        <Value>
          <X>708</X>
          <Y>543</Y>
        </Value>
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="X" Selector="X" />
          <Property Name="Y" Selector="Y" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CreatePoint2f">
          <cv:X>708</cv:X>
          <cv:Y>543</cv:Y>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="InnerRadius" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>505</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="OuterRadius" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>531</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings />
              <Selector>Item1,Item2</Selector>
              <TypeMapping xsi:type="TypeMapping" TypeArguments="cv:Circle" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings />
              <Selector>Item1,Item3</Selector>
              <TypeMapping xsi:type="TypeMapping" TypeArguments="cv:Circle" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="9" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="9" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source3" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>