<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:aeon-env="clr-namespace:Aeon.Environment;assembly=Aeon.Environment"
                 xmlns:p1="clr-namespace:System.Reactive.Linq;assembly=System.Reactive.Interfaces"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:sleap="clr-namespace:Bonsai.Sleap;assembly=Bonsai.Sleap"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Metadata</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>Devices</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>ClockSynchronizer</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>BehaviorSynchronizer</Name>
                          <Description>Provides support for uninterruptible synchronization of all arena Harp devices and setting the UTC time reference.</Description>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>VideoEvents</Name>
                              </Expression>
                              <Expression xsi:type="rx:PublishSubject">
                                <Name>SynchronizerEvents</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="harp:FilterMessageType">
                                  <harp:FilterType>Include</harp:FilterType>
                                  <harp:MessageType>Event</harp:MessageType>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="harp:FilterRegister">
                                <harp:FilterType>Include</harp:FilterType>
                                <harp:Register xsi:type="harp:TimestampSeconds" />
                              </Expression>
                              <Expression xsi:type="rx:PublishSubject">
                                <Name>Heartbeats</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                              <Expression xsi:type="SubscribeSubject">
                                <Name>SynchronizerEvents</Name>
                              </Expression>
                              <Expression xsi:type="beh:Parse">
                                <harp:Register xsi:type="beh:TimestampedAnalogData" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Slice">
                                  <rx:Start>0</rx:Start>
                                  <rx:Step>2</rx:Step>
                                  <rx:Stop xsi:nil="true" />
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:PublishSubject">
                                <Name>PatchTrigger</Name>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>VideoController</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="PortName" />
                          <Property Name="GlobalTriggerFrequency" />
                          <Property Name="LocalTriggerFrequency" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:VideoController.bonsai">
                          <DeviceType>Behavior</DeviceType>
                          <PortName>COM4</PortName>
                          <GlobalTriggerFrequency>50</GlobalTriggerFrequency>
                          <LocalTriggerFrequency>125</LocalTriggerFrequency>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>CameraTop</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TriggerSource" />
                          <Property Name="FrameEvents" />
                          <Property Name="TriggerFrequency" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:FileVideoSource.bonsai">
                          <TriggerSource>GlobalTrigger</TriggerSource>
                          <FileName>Config\ArenaMask-AEON3_2023-11-10.png</FileName>
                          <FrameEvents>CameraTop</FrameEvents>
                          <TriggerFrequency>GlobalTriggerFrequency</TriggerFrequency>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>CameraWest</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TriggerSource" />
                          <Property Name="FrameEvents" />
                          <Property Name="TriggerFrequency" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:FileVideoSource.bonsai">
                          <TriggerSource>GlobalTrigger</TriggerSource>
                          <FileName>Config\ArenaMask-AEON3_2023-11-10.png</FileName>
                          <FrameEvents>CameraWest</FrameEvents>
                          <TriggerFrequency>GlobalTriggerFrequency</TriggerFrequency>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>CameraEast</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TriggerSource" />
                          <Property Name="FrameEvents" />
                          <Property Name="TriggerFrequency" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:FileVideoSource.bonsai">
                          <TriggerSource>GlobalTrigger</TriggerSource>
                          <FileName>Config\ArenaMask-AEON3_2023-11-10.png</FileName>
                          <FrameEvents>CameraEast</FrameEvents>
                          <TriggerFrequency>GlobalTriggerFrequency</TriggerFrequency>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>CameraNorth</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TriggerSource" />
                          <Property Name="FrameEvents" />
                          <Property Name="TriggerFrequency" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:FileVideoSource.bonsai">
                          <TriggerSource>GlobalTrigger</TriggerSource>
                          <FileName>Config\ArenaMask-AEON3_2023-11-10.png</FileName>
                          <FrameEvents>CameraNorth</FrameEvents>
                          <TriggerFrequency>GlobalTriggerFrequency</TriggerFrequency>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>CameraSouth</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TriggerSource" />
                          <Property Name="FrameEvents" />
                          <Property Name="TriggerFrequency" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:FileVideoSource.bonsai">
                          <TriggerSource>GlobalTrigger</TriggerSource>
                          <FileName>Config\ArenaMask-AEON3_2023-11-10.png</FileName>
                          <FrameEvents>CameraSouth</FrameEvents>
                          <TriggerFrequency>GlobalTriggerFrequency</TriggerFrequency>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>CameraNest</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TriggerSource" />
                          <Property Name="FrameEvents" />
                          <Property Name="TriggerFrequency" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:FileVideoSource.bonsai">
                          <TriggerSource>GlobalTrigger</TriggerSource>
                          <FileName>Config\ArenaMask-AEON3_2023-11-10.png</FileName>
                          <FrameEvents>CameraNest</FrameEvents>
                          <TriggerFrequency>GlobalTriggerFrequency</TriggerFrequency>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>CameraPatch1</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TriggerSource" />
                          <Property Name="FrameEvents" />
                          <Property Name="TriggerFrequency" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:FileVideoSource.bonsai">
                          <TriggerSource>LocalTrigger</TriggerSource>
                          <FileName>Config\ArenaMask-AEON3_2023-11-10.png</FileName>
                          <FrameEvents>CameraPatch1</FrameEvents>
                          <TriggerFrequency>LocalTriggerFrequency</TriggerFrequency>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>CameraPatch2</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TriggerSource" />
                          <Property Name="FrameEvents" />
                          <Property Name="TriggerFrequency" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:FileVideoSource.bonsai">
                          <TriggerSource>LocalTrigger</TriggerSource>
                          <FileName>Config\ArenaMask-AEON3_2023-11-10.png</FileName>
                          <FrameEvents>CameraPatch2</FrameEvents>
                          <TriggerFrequency>LocalTriggerFrequency</TriggerFrequency>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>CameraPatch3</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="TriggerSource" />
                          <Property Name="FrameEvents" />
                          <Property Name="TriggerFrequency" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:FileVideoSource.bonsai">
                          <TriggerSource>LocalTrigger</TriggerSource>
                          <FileName>Config\ArenaMask-AEON3_2023-11-10.png</FileName>
                          <FrameEvents>CameraPatch3</FrameEvents>
                          <TriggerFrequency>LocalTriggerFrequency</TriggerFrequency>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Patch1</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="WheelDisplacement" />
                          <Property Name="PelletDelivered" />
                          <Property Name="DeliverPellet" />
                          <Property Name="PatchEvents" />
                          <Property Name="ResetFeeder" />
                          <Property Name="TriggerSource" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Foraging:VirtualFeeder.bonsai">
                          <PatchEvents>Patch1Events</PatchEvents>
                          <ActivationKey>D1</ActivationKey>
                          <TickScale>-0.05</TickScale>
                          <TriggerSource>PatchTrigger</TriggerSource>
                          <WheelDisplacement>Patch1WheelDisplacement</WheelDisplacement>
                          <DeliverPellet>Patch1DeliverPellet</DeliverPellet>
                          <PelletDelivered>Patch1PelletDelivered</PelletDelivered>
                          <ResetFeeder>Patch1ResetFeeder</ResetFeeder>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Patch2</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="WheelDisplacement" />
                          <Property Name="PelletDelivered" />
                          <Property Name="DeliverPellet" />
                          <Property Name="PatchEvents" />
                          <Property Name="ResetFeeder" />
                          <Property Name="TriggerSource" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Foraging:VirtualFeeder.bonsai">
                          <PatchEvents>Patch2Events</PatchEvents>
                          <ActivationKey>D2</ActivationKey>
                          <TickScale>-0.05</TickScale>
                          <TriggerSource>PatchTrigger</TriggerSource>
                          <WheelDisplacement>Patch2WheelDisplacement</WheelDisplacement>
                          <DeliverPellet>Patch2DeliverPellet</DeliverPellet>
                          <PelletDelivered>Patch2PelletDelivered</PelletDelivered>
                          <ResetFeeder>Patch2ResetFeeder</ResetFeeder>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Patch3</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="WheelDisplacement" />
                          <Property Name="PelletDelivered" />
                          <Property Name="DeliverPellet" />
                          <Property Name="PatchEvents" />
                          <Property Name="ResetFeeder" />
                          <Property Name="TriggerSource" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Foraging:VirtualFeeder.bonsai">
                          <PatchEvents>Patch3Events</PatchEvents>
                          <ActivationKey>D3</ActivationKey>
                          <TickScale>-0.05</TickScale>
                          <TriggerSource>PatchTrigger</TriggerSource>
                          <WheelDisplacement>Patch3WheelDisplacement</WheelDisplacement>
                          <DeliverPellet>Patch3DeliverPellet</DeliverPellet>
                          <PelletDelivered>Patch3PelletDelivered</PelletDelivered>
                          <ResetFeeder>Patch3ResetFeeder</ResetFeeder>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Nest</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="BaselineWeightTrigger" />
                          <Property Name="FilterWindow" />
                          <Property Name="WeightData" />
                          <Property Name="TareCommands" />
                          <Property Name="TareEvents" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\VirtualWeightScale.bonsai">
                          <BaselineWeightTrigger>NestBaselineWeight</BaselineWeightTrigger>
                          <FilterWindow>40</FilterWindow>
                          <WeightData>NestWeightData</WeightData>
                          <TareCommands>NestTareCommands</TareCommands>
                          <TareEvents>NestTareEvents</TareEvents>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:Timestamped(aeon-env:RfidMeasurement)">
                    <rx:Name>GateRfidInboundDetected</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:Timestamped(aeon-env:RfidMeasurement)">
                    <rx:Name>NestRfid1InboundDetected</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:Timestamped(aeon-env:RfidMeasurement)">
                    <rx:Name>NestRfid2InboundDetected</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:Timestamped(aeon-env:RfidMeasurement)">
                    <rx:Name>Patch1RfidInboundDetected</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:Timestamped(aeon-env:RfidMeasurement)">
                    <rx:Name>Patch2RfidInboundDetected</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:Timestamped(aeon-env:RfidMeasurement)">
                    <rx:Name>Patch3RfidInboundDetected</rx:Name>
                  </Expression>
                </Nodes>
                <Edges />
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>TrackingTop</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="FrameEvents" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraTop</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Mask" />
                    <Property Name="ThresholdValue" />
                    <Property Name="TrackingEvents" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:PositionTracking.bonsai">
                    <ThresholdValue>83</ThresholdValue>
                    <Mask>Config\ArenaMask-AEON3_2023-10-22.png</Mask>
                    <TrackingCount>1</TrackingCount>
                    <TrackingEvents>TrackingTop</TrackingEvents>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>PoseTrackingTop</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>PoseTracking</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:IGroupedObservable(aeon:PoseTrackingMetadata,harp:Timestamped(sleap:PoseIdentityCollection))">
                          <rx:Name>PoseTrackingTop</rx:Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ActivityCenter</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraTop</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:ActivityTracking.bonsai">
                    <Regions>
                      <ArrayOfPoint>
                        <Point>
                          <X>76</X>
                          <Y>431</Y>
                        </Point>
                        <Point>
                          <X>404</X>
                          <Y>431</Y>
                        </Point>
                        <Point>
                          <X>404</X>
                          <Y>665</Y>
                        </Point>
                        <Point>
                          <X>76</X>
                          <Y>665</Y>
                        </Point>
                      </ArrayOfPoint>
                    </Regions>
                    <ThresholdValue>10</ThresholdValue>
                    <TrackingEvents>ActivityCenter</TrackingEvents>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Declarations.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Visualization.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\ControlPanel.bonsai">
        <SelectedStream>CameraTop</SelectedStream>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="EnvironmentConfigPath" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\EnvironmentLogic.bonsai">
        <EnvironmentConfigPath>EnvironmentRandom.yml</EnvironmentConfigPath>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="4" To="5" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>