<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.0-alpha018"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:zmq="clr-namespace:Bonsai.ZeroMQ;assembly=Bonsai.ZeroMQ"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>M</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Hello</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="zmq:Dealer">
          <zmq:ConnectionString>tcp://172.24.158.104:4242</zmq:ConnectionString>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>FrameCount</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>FrameCount</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Connection</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>First</Selector>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>StreamId</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Last</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ZeroMqStreamIdAdress" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>StreamId</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Camera</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item1.Contains(Item2)</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Adress</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Adress</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Adress</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ConnectionString" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="zmq:Subscriber">
                <zmq:ConnectionString>tcp://172.24.158.104:5012</zmq:ConnectionString>
                <zmq:Topic>ImageSingle</zmq:Topic>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Last.Buffer</Selector>
            </Expression>
            <Expression xsi:type="osc:Parse">
              <osc:Address>/EncodeImage</osc:Address>
              <osc:TypeTag>b</osc:TypeTag>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:DecodeImage">
                <cv:Mode>Unchanged</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>Adress</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Adress</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="ConnectionString" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="zmq:Subscriber">
                  <zmq:ConnectionString>tcp://172.24.158.104:5012</zmq:ConnectionString>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="p1:MessageToImage" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="WorkflowOutput" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>StreamId</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="rx:GroupBy">
        <rx:KeySelector>Item2</rx:KeySelector>
        <rx:ElementSelector>Item1</rx:ElementSelector>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Cameras</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Cameras</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\SelectStream.bonsai">
        <StreamId>CameraNorth</StreamId>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TimeInterval" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Interval</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Cameras</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TimeInterval" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Interval</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="4" To="8" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="9" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="12" To="14" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>