<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>23106249</spk:SerialNumber>
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>CameraPatch</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:BufferTime">
          <rx:TimeSpan>PT1S</rx:TimeSpan>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Count</Selector>
      </Expression>
      <Expression xsi:type="aeon:StateRecoverySubject" TypeArguments="sys:ValueTuple(sys:Double,sys:Double,sys:Double)">
        <aeon:Name>PatchState</aeon:Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:UndergroundFeeder.bonsai">
        <PatchEvents>PatchEvents</PatchEvents>
        <SampleRate>SampleRate500Hz</SampleRate>
        <DeliverPellet>DeliverPellet</DeliverPellet>
        <PelletDelivered>PelletDelivered</PelletDelivered>
        <DueTime>PT0S</DueTime>
        <Count>0</Count>
        <ResetFeeder>ResetFeeder</ResetFeeder>
        <PortName>COM4</PortName>
        <Radius>-4</Radius>
        <WheelDisplacement>WheelDisplacement</WheelDisplacement>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>WheelDisplacement</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LinearDepletion</Name>
        <Description>The patch is depleted using a linear depletion function.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="DistanceState" />
            </Expression>
            <Expression xsi:type="aeon:StateRecoverySubject" TypeArguments="harp:Timestamped(sys:Double)">
              <aeon:Name>DistanceState</aeon:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="aeon:PrependOnce" />
            </Expression>
            <Expression xsi:type="aeon:TransformTimestamped">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Gain" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:DistanceTravelled.bonsai">
                    <Gain>1</Gain>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Skip">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
              <aeon:IncludeTimestamp>false</aeon:IncludeTimestamp>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DistanceState</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DistanceThreshold" />
              <Property Name="Delta" />
              <Property Name="DeliveryCount" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PatchState" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>DepletionFunction</Name>
              <Description />
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="DeliveryCount" />
                  </Expression>
                  <Expression xsi:type="aeon:StateRecoverySubject">
                    <Name>DeliveryCount</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="PatchState" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PatchState</Name>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Threshold</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DeliveryCount</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
Item1.Item2 + Item1.Item3 * Item2 as Threshold,
Item1.Item2 as D0,
Item1.Item3 as Delta)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Threshold,D0,Delta</Selector>
                    <TypeMapping xsi:type="TypeMapping" TypeArguments="sys:ValueTuple(sys:Double,sys:Double,sys:Double)" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>PatchState</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>100</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DeliveryCount</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Add" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Repeat" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DeliveryCount</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="DistanceThreshold" Description="The distance required to obtain the first pellet." />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PatchState</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="DoubleProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" Selector="Item2" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>100</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PatchState</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
Item2.Item1 as Threshold,
Item1 as D0,
Item2.Item3 as Delta)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Threshold,D0,Delta</Selector>
                    <TypeMapping xsi:type="TypeMapping" TypeArguments="sys:ValueTuple(sys:Double,sys:Double,sys:Double)" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>PatchState</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Delta" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PatchState</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" Selector="Item3" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="DoubleProperty,sys:Double">
                    <MemberName>Delta</MemberName>
                    <Value>0</Value>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PatchState</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
Item2.Item1 as Threshold,
Item2.Item2 as D0,
Item1 as Delta)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Threshold,D0,Delta</Selector>
                    <TypeMapping xsi:type="TypeMapping" TypeArguments="sys:ValueTuple(sys:Double,sys:Double,sys:Double)" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>PatchState</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="1" To="8" Label="Source1" />
                  <Edge From="1" To="20" Label="Source1" />
                  <Edge From="1" To="24" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="16" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="5" To="13" Label="Source2" />
                  <Edge From="5" To="27" Label="Source1" />
                  <Edge From="5" To="32" Label="Source1" />
                  <Edge From="5" To="36" Label="Source2" />
                  <Edge From="5" To="38" Label="Source1" />
                  <Edge From="5" To="42" Label="Source1" />
                  <Edge From="5" To="46" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="9" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="21" Label="Source1" />
                  <Edge From="20" To="21" Label="Source2" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="26" To="31" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source2" />
                  <Edge From="31" To="33" Label="Source1" />
                  <Edge From="32" To="33" Label="Source2" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="37" To="41" Label="Source1" />
                  <Edge From="38" To="39" Label="Source1" />
                  <Edge From="39" To="40" Label="Source1" />
                  <Edge From="40" To="41" Label="Source2" />
                  <Edge From="41" To="43" Label="Source1" />
                  <Edge From="42" To="43" Label="Source2" />
                  <Edge From="43" To="44" Label="Source1" />
                  <Edge From="44" To="45" Label="Source1" />
                  <Edge From="45" To="46" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="6" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="9" Label="Source2" />
            <Edge From="8" To="9" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>DeliverPellet</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Visualization</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DistanceState</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PatchState</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Buffer">
                <dsp:Count>15</dsp:Count>
                <dsp:Skip xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>PatchMonitor</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PatchState</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ToArray</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:IgnoreElements" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:ToArray" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DelaySubscription">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="7" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DeliveryCount</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
int32(Item2) as PelletCount,
Item1 as Threshold)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>CurrentThreshold</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>PelletMonitor</Name>
              <Description>Monitors pellet delivery state of commands and beam breaks.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="PelletCommand" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PatchEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:FilterMessage">
                      <harp:MessageType>Write</harp:MessageType>
                      <harp:Address>35</harp:Address>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
it.GetTimestamp() as Timestamp,
False as Value)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="PelletDelivered" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PelletDelivered</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
Seconds as Timestamp,
True as Value)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PatchEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:FilterMessageType">
                      <harp:FilterType>Include</harp:FilterType>
                      <harp:MessageType>Write</harp:MessageType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="harp:FilterRegister">
                    <harp:FilterType>Include</harp:FilterType>
                    <harp:Register xsi:type="harp:FilterRegisterAddress">
                      <harp:Address>35</harp:Address>
                    </harp:Register>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="7" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>PelletMonitor</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>PelletMonitorValue</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="1" To="5" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>PatchMonitor</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraPatch</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SampleInterval">
                <rx:Interval>PT0.02S</rx:Interval>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>PatchMonitor</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:SelectChannels">
                <dsp:Channels>
                  <dsp:int>0</dsp:int>
                  <dsp:int>1</dsp:int>
                </dsp:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>PelletMonitorValue</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="viz:TableLayoutPanelBuilder">
              <viz:Name>PatchActivity</viz:Name>
              <viz:ColumnCount>1</viz:ColumnCount>
              <viz:RowCount>3</viz:RowCount>
              <viz:ColumnStyles />
              <viz:RowStyles />
              <viz:CellSpans>
                <viz:CellSpan ColumnSpan="1" RowSpan="1" />
                <viz:CellSpan ColumnSpan="1" RowSpan="1" />
                <viz:CellSpan ColumnSpan="1" RowSpan="1" />
                <viz:CellSpan ColumnSpan="1" RowSpan="1" />
                <viz:CellSpan ColumnSpan="1" RowSpan="1" />
                <viz:CellSpan ColumnSpan="1" RowSpan="1" />
                <viz:CellSpan ColumnSpan="1" RowSpan="1" />
                <viz:CellSpan ColumnSpan="1" RowSpan="1" />
              </viz:CellSpans>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="9" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="9" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="aeon:DispenserState" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Reset</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>EventType</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="aeon:DispenserEventType">
                <Value>Reset</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>ResetFeeder</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>EventType</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ThresholdValue" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DetectPellets</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraPatch</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="RegionOfInterest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>292</cv:X>
                  <cv:Y>204</cv:Y>
                  <cv:Width>31</cv:Width>
                  <cv:Height>156</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CroppedImage</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ThresholdValue" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>226</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>Binary</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:MorphologicalOperator">
                <cv:Size>
                  <cv:Width>3</cv:Width>
                  <cv:Height>3</cv:Height>
                </cv:Size>
                <cv:Anchor>
                  <cv:X>-1</cv:X>
                  <cv:Y>-1</cv:Y>
                </cv:Anchor>
                <cv:Shape>Rectangle</cv:Shape>
                <cv:Iterations>1</cv:Iterations>
                <cv:Operation>Open</cv:Operation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>External</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea>25</cv:MinArea>
                <cv:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>BinaryRegions</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Count</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
              <Name>PatchEvents</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ComputerVisionPelletDelivered</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggingPath</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>PelletsDetected.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\{1}</Format>
              <Selector>Item1,Item2</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>D:\ProjectAeon\PatchTestNewBlackMaterial\Collection2025_11_05_15_20_11\PelletsDetected.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Sum" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
              <Name>PatchEvents</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggingPath</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>PixelSum.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\{1}</Format>
              <Selector>Item1,Item2</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>D:\ProjectAeon\PatchTestNewBlackMaterial\Collection2025_11_05_15_20_11\PixelSum.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BinaryRegions</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Area</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
              <Name>PatchEvents</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggingPath</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>LargestBinaryRegionArea.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\{1}</Format>
              <Selector>Item1,Item2</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>D:\ProjectAeon\PatchTestNewBlackMaterial\Collection2025_11_05_15_20_11\LargestBinaryRegionArea.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PelletDelivered</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>1*100/it</scr:Expression>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="7" To="23" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="12" To="15" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="16" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="22" Label="Source1" />
            <Edge From="17" To="19" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="25" To="27" Label="Source1" />
            <Edge From="26" To="28" Label="Source1" />
            <Edge From="27" To="28" Label="Source2" />
            <Edge From="28" To="34" Label="Source1" />
            <Edge From="29" To="31" Label="Source1" />
            <Edge From="30" To="31" Label="Source2" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source2" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="38" To="40" Label="Source1" />
            <Edge From="39" To="41" Label="Source1" />
            <Edge From="40" To="41" Label="Source2" />
            <Edge From="41" To="47" Label="Source1" />
            <Edge From="42" To="44" Label="Source1" />
            <Edge From="43" To="44" Label="Source2" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="46" To="47" Label="Source2" />
            <Edge From="48" To="49" Label="Source1" />
            <Edge From="49" To="50" Label="Source1" />
            <Edge From="49" To="51" Label="Source2" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="52" To="53" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Path" />
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="io:GetDirectories,sys:String">
              <MemberName>Path</MemberName>
              <Value>D:\ProjectAeon\PatchTestNewBlackMaterial</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Value +  "\Collection" + it.TimeStamp.ToString("yyyy_MM_dd_HH_mm_ss")</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>LoggingPath</Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>TimestampedLogging</rx:Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>TimestampedLogging</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>MessageType</Selector>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="harp:MessageType">
                            <Value>Event</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PatchEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:GroupBy">
                    <rx:KeySelector>Address</rx:KeySelector>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>LogHarpStreams</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>Register</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="LogName" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>Streams</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Register</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>LoggingPath</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{2}\{0}_{1}</Format>
                          <Selector>Item1,Item2,Item3</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>LogName</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Register</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>MessageBytes</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>LogName</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Path" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="dsp:MatrixWriter">
                            <dsp:Path>D:\ProjectAeon\PatchTestNewBlackMaterial\Collection2025_11_05_15_20_11\Streams_8</dsp:Path>
                            <dsp:Suffix>None</dsp:Suffix>
                            <dsp:Overwrite>false</dsp:Overwrite>
                            <dsp:Layout>ColumnMajor</dsp:Layout>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="8" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="8" Label="Source2" />
                        <Edge From="7" To="8" Label="Source3" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="17" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="17" Label="Source2" />
                        <Edge From="17" To="18" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>CameraLogging</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraPatch</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Image</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ElementIndex" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Index</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
                    <Name>PatchEvents</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoggingPath</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>CameraFrameIndex.csv</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}</Format>
                    <Selector>Item1,Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>D:\ProjectAeon\PatchTestNewBlackMaterial\Collection2025_11_05_15_20_11\CameraFrameIndex.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoggingPath</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>PatchVideo.avi</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}</Format>
                    <Selector>Item1,Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:VideoWriter">
                      <cv:FileName>D:\ProjectAeon\PatchTestNewBlackMaterial\Collection2025_11_05_15_20_11\PatchVideo.avi</cv:FileName>
                      <cv:Suffix>None</cv:Suffix>
                      <cv:Buffered>true</cv:Buffered>
                      <cv:Overwrite>false</cv:Overwrite>
                      <cv:FourCC>FMP4</cv:FourCC>
                      <cv:FrameRate>120</cv:FrameRate>
                      <cv:FrameSize>
                        <cv:Width>0</cv:Width>
                        <cv:Height>0</cv:Height>
                      </cv:FrameSize>
                      <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="19" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="13" Label="Source1" />
                  <Edge From="8" To="10" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="14" To="16" Label="Source1" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PelletMonitor</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggingPath</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>PelletMonitor.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\{1}</Format>
              <Selector>Item1,Item2</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>D:\ProjectAeon\PatchTestNewBlackMaterial\Collection2025_11_05_15_20_11\PelletMonitor.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PatchMonitor</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggingPath</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>PatchMonitor.bin</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\{1}</Format>
              <Selector>Item1,Item2</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>D:\ProjectAeon\PatchTestNewBlackMaterial\Collection2025_11_05_15_20_11\PatchMonitor.bin</dsp:Path>
                <dsp:Suffix>None</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="18" Label="Source1" />
            <Edge From="13" To="15" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="19" To="25" Label="Source1" />
            <Edge From="20" To="22" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>WheelVelocity</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>WheelDisplacement</Name>
            </Expression>
            <Expression xsi:type="aeon:TransformTimestamped">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Gain" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:DistanceTravelled.bonsai">
                    <Gain>1</Gain>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Skip">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
              <aeon:IncludeTimestamp>false</aeon:IncludeTimestamp>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2.Value</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1.Value</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="MemberSelector">
              <Selector>Item2.Seconds</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1.Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Divide" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Event</harp:MessageType>
              <harp:Register xsi:type="harp:FormatMessagePayload">
                <harp:Address>203</harp:Address>
                <harp:PayloadType>TimestampedS64</harp:PayloadType>
              </harp:Register>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TimestampedLogging</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="3" To="8" Label="Source1" />
            <Edge From="3" To="9" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="12" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="8" To="14" Label="Source2" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>WheelDisplacement</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PelletDelivered</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Item2 ? 1.0 : 0.0</scr:Expression>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Filter" DisplayName="ResetFeederShortcut" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>RButton ShiftKey Menu B P R Control</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>ResetFeeder</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="11" To="14" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="23" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>